<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="500" y="500" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cell1"/>
   </Plugin>
   
   <Plugin Name="AdhesionFlex">


        <AdhesionMolecule Molecule="adhesion1"/>
        <AdhesionMolecule Molecule="adhesion2"/>
        <AdhesionMolecule Molecule="adhesion3"/>
        <AdhesionMolecule Molecule="adhesion4"/>
        <AdhesionMolecule Molecule="adhesion5"/>
        <AdhesionMolecule Molecule="adhesion6"/>


        <AdhesionMoleculeDensity CellType="cell1" Molecule="adhesion1" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="cell1" Molecule="adhesion2" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="cell1" Molecule="adhesion3" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="cell1" Molecule="adhesion4" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="cell1" Molecule="adhesion5" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="cell1" Molecule="adhesion6" Density="1.0"/> 
        <AdhesionMoleculeDensity CellType="Medium" Molecule="adhesion1" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="Medium" Molecule="adhesion2" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="Medium" Molecule="adhesion3" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="Medium" Molecule="adhesion4" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="Medium" Molecule="adhesion5" Density="1.0"/>
        <AdhesionMoleculeDensity CellType="Medium" Molecule="adhesion6" Density="1.0"/> 


        <BindingFormula Name="Binary">
            <Formula>(Molecule1 * Molecule2)</Formula>
            <Variables>
                <AdhesionInteractionMatrix>
                    <BindingParameter Molecule1="adhesion1" Molecule2="adhesion1">1.0</BindingParameter>
                    <BindingParameter Molecule1="adhesion2" Molecule2="adhesion2">1.0</BindingParameter>
                    <BindingParameter Molecule1="adhesion3" Molecule2="adhesion3">1.0</BindingParameter>
                    <BindingParameter Molecule1="adhesion4" Molecule2="adhesion4">1.0</BindingParameter>
                    <BindingParameter Molecule1="adhesion5" Molecule2="adhesion5">1.0</BindingParameter>
                    <BindingParameter Molecule1="adhesion6" Molecule2="adhesion6">1.0</BindingParameter>
                    
                </AdhesionInteractionMatrix>
            </Variables>
        </BindingFormula>

        <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <!-- <Plugin Name="Contact"> -->
      <!-- &lt;!&ndash; Specification of adhesion energies &ndash;&gt;  -->
      <!-- <Energy Type1="Medium" Type2="Medium">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="cell1">10.0</Energy> -->
      <!-- <Energy Type1="cell1" Type2="cell1">10.0</Energy> -->
      <!-- <NeighborOrder>4</NeighborOrder> -->
   <!-- </Plugin> -->
   
   <Plugin Name="Chemotaxis">
      
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
      <!-- Specification of chemotaxis properties of select cell types. -->
      <ChemicalField Name="glucose">
         <!-- <ChemotaxisByType Lambda="3.0" Type="cell1"/> -->
      </ChemicalField>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="glucose">
         <DiffusionData>
            <FieldName>glucose</FieldName>
            <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <InitialConcentrationExpression>x/10.0</InitialConcentrationExpression>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="12.8"/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
</CompuCell3D>
